<?xml version="1.0" encoding="UTF-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="de.fau" Category="robot"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>SiteManager</Identifier>
    <DisplayName>Site Manager</DisplayName>
    <Description>Manager to set and remove sites which define the pick-up and drop locations for the robot gripper.</Description>

    <Property>
        <Identifier>Sites</Identifier>
        <DisplayName>Sites</DisplayName>
        <Description>Available Sites.</Description>
        <Observable>No</Observable>
        <DataType>
            <List>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
            </List>
        </DataType>
    </Property>

    <Command>
        <Identifier>SetSite</Identifier>
        <DisplayName>Set Site</DisplayName>
        <Description>Adds or overwrites a site. The orientation is defined by an quaternion (XYZW).</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The site to set.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>Pose</Identifier>
            <DisplayName>Pose</DisplayName>
            <Description>The pose to reach the site.</Description>
            <DataType>
                <DataTypeIdentifier>Pose</DataTypeIdentifier>
            </DataType>
        </Parameter>
    </Command>

    <Command>
        <Identifier>DeleteSite</Identifier>
        <DisplayName>Delete Site</DisplayName>
        <Description>Removes a Site from the manager.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>SiteId</Identifier>
            <DisplayName>Site ID</DisplayName>
            <Description>The site to delete.</Description>
            <DataType>
                <DataTypeIdentifier>SiteId</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>SiteIdNotFound</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <DataTypeDefinition>
        <Identifier>SiteId</Identifier>
        <DisplayName>Site ID</DisplayName>
        <Description>The string identifier of the site.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Pattern>[a-zA-Z0-9_'-]+</Pattern>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>

    <DataTypeDefinition>
        <Identifier>Pose</Identifier>
        <DisplayName>Pose</DisplayName>
        <Description>The pose of the gripper to reach the site. The pose itself consists of two parts: The position as vector (XYZ) and the orientation as quaternion (XYZW).</Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>X</Identifier>
                    <DisplayName>X</DisplayName>
                    <Description>The X position of the site.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Y</Identifier>
                    <DisplayName>Y</DisplayName>
                    <Description>The Y position of the site.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Z</Identifier>
                    <DisplayName>Z</DisplayName>
                    <Description>The Z position defining the relative height.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriX</Identifier>
                    <DisplayName>Orientation X</DisplayName>
                    <Description>The X value.</Description>
                    <DataType>
                        <Basic>Real</Basic>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriY</Identifier>
                    <DisplayName>Orientation Y</DisplayName>
                    <Description>The Y value.</Description>
                    <DataType>
                        <Basic>Real</Basic>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriZ</Identifier>
                    <DisplayName>Orientation Z</DisplayName>
                    <Description>The Z value.</Description>
                    <DataType>
                        <Basic>Real</Basic>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>OriW</Identifier>
                    <DisplayName>Orientation W</DisplayName>
                    <Description>The W value.</Description>
                    <DataType>
                        <Basic>Real</Basic>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>

    <DataTypeDefinition>
        <Identifier>RelativeMove</Identifier>
        <DisplayName>Relative Move</DisplayName>
        <Description>Move a relative distance to a given direction. This is used to define approach an retreat actions.</Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>X</Identifier>
                    <DisplayName>X</DisplayName>
                    <Description>The X direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Y</Identifier>
                    <DisplayName>Y</DisplayName>
                    <Description>The Y direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Z</Identifier>
                    <DisplayName>Z</DisplayName>
                    <Description>The Z direction.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>-1.0</MinimalInclusive>
                                <MaximalInclusive>1.0</MaximalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Distance</Identifier>
                    <DisplayName>Distance</DisplayName>
                    <Description>The distance do move.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Real</Basic>
                            </DataType>
                            <Constraints>
                                <Unit>
                                    <Label>m</Label>
                                    <Factor>1.0</Factor>
                                    <Offset>0</Offset>
                                    <UnitComponent>
                                        <SIUnit>Meter</SIUnit>
                                        <Exponent>1</Exponent>
                                    </UnitComponent>
                                </Unit>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>

    <DefinedExecutionError>
        <Identifier>SiteIdNotFound</Identifier>
        <DisplayName>Site ID not found</DisplayName>
        <Description>The given site ID could not be found or does not exist.</Description>
    </DefinedExecutionError>
</Feature>
